PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Use version = 2024.2.4
  Window size (pixels) = [1440, 900]
  color = 0.6549, 0.6549, 0.6549
  expName = IAT
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Introduction
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent information
      image = picture/02_information.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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  Routine record_Task_C1
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    ImageComponent background_C_2
      image = picture/background_C.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_C1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $words
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    KeyboardComponent key_resp_C1
      allowedKeys = 'a','l'
      correctAns = $keypad
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine record_Task_C2
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    ImageComponent background_C_5
      image = picture/background_C.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_C2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $words
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    KeyboardComponent key_resp_C2
      allowedKeys = 'a','l'
      correctAns = $keypad
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine record_Task_C3
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    ImageComponent background_C_7
      image = picture/background_C.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_C3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $words
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    KeyboardComponent key_resp_C3
      allowedKeys = 'a','l'
      correctAns = $keypad
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine result
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        total_rt = []
        correct_responses = 0
        total_trials = 0
      Begin Routine:
        if total_trials > 0:  # Avoid division by zero
            mean_rt = round(sum(total_rt) / len(total_rt) * 1000, 2)  # Convert to milliseconds
            accuracy = round((correct_responses / total_trials) * 100, 2)  # Percentage
            feedback_msg = f"Mean RT: {mean_rt} ms\nAccuracy: {accuracy}%"
        else:
            feedback_msg = "No responses recorded."

        total_rt = []  # Reset for next block
        correct_responses = 0
        total_trials = 0
      End Routine:
        if key_resp.keys:  # If a key was pressed
            total_rt.append(key_resp.rt)  # Store reaction time
            total_trials += 1  # Count trials
            if key_resp.corr:  # Check if the response was correct
                correct_responses += 1
    TextComponent text_17
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_msg
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  Routine record_Task_D1
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    ImageComponent background_D_2
      image = picture/background_D.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_D1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $name
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    KeyboardComponent key_resp_D1
      allowedKeys = 'a','l'
      correctAns = $keypad
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine practice_Task_E1
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    ImageComponent background_E_2
      image = picture/background_E.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_E1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $words
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    KeyboardComponent key_resp_E1
      allowedKeys = 'a','l'
      correctAns = $keypad
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine record_Task_E2
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    ImageComponent background_E_5
      image = picture/background_E.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_E2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $words
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    KeyboardComponent key_resp_E2
      allowedKeys = 'a','l'
      correctAns = $keypad
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine record_Task_E3
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    ImageComponent background_E_7
      image = picture/background_E.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_E3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $words
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    KeyboardComponent key_resp_E3
      allowedKeys = 'a','l'
      correctAns = $keypad
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine record_Task_F1
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    ImageComponent background_F_2
      image = picture/background_F.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_F1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $name
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    KeyboardComponent key_resp_F1
      allowedKeys = 'a','l'
      correctAns = $keypad
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine practice_Task_G1
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    ImageComponent background_G_2
      image = picture/background_G.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_G1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $words
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    KeyboardComponent key_resp_G1
      allowedKeys = 'a','l'
      correctAns = $keypad
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine record_Task_G2
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    ImageComponent background_G_5
      image = picture/background_G.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_G2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $words
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    KeyboardComponent key_resp_G2
      allowedKeys = 'a','l'
      correctAns = $keypad
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine record_Task_G3
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    ImageComponent background_G_7
      image = picture/background_G.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_G3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $words
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    KeyboardComponent key_resp_G3
      allowedKeys = 'a','l'
      correctAns = $keypad
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine record_Task_H1
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    ImageComponent background_H_2
      image = picture/background_H.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_H1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $name
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    KeyboardComponent key_resp_H1
      allowedKeys = 'a','l'
      correctAns = $keypad
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine practice_Task_I1
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    ImageComponent background_I_2
      image = picture/background_I.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_I1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $words
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    KeyboardComponent key_resp_I1
      allowedKeys = 'a','l'
      correctAns = $keypad
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine record_Task_I2
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    ImageComponent background_I_5
      image = picture/background_I.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_I2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $words
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    KeyboardComponent key_resp_I2
      allowedKeys = 'a','l'
      correctAns = $keypad
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine record_Task_I3
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    KeyboardComponent key_resp_I3
      allowedKeys = 'a','l'
      correctAns = $keypad
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent background_record_task_I3
      image = picture/background_I.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_I3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $words
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  Routine score_A1
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    TextComponent score_A1_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $feedback_msg
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    KeyboardComponent key_resp_score
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent score_A1_code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_msg =""
      Begin Routine:
        feedback_msg =""

        accuracy = round((key_resp_A1_corr_sum / 50) * 100, 2)
        rt_average = round((key_resp_A1_rt_sum / 50) * 1000, 2)

        feedback_msg += "Accuracy: " + str(accuracy) + "%\n"
        feedback_msg += "RT Average: " + str(rt_average) + " ms\n"
        feedback_msg += "Press space bar to continue."
  Routine score_A2
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    TextComponent score_A2_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $feedback_msg
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent score_A2_code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_msg =""
      Begin Routine:
        feedback_msg =""

        accuracy = round((key_resp_A2_corr_sum / 50) * 100, 2)
        rt_average = round((key_resp_A2_rt_sum / 50) * 1000, 2)

        feedback_msg += "Accuracy: " + str(accuracy) + "%\n"
        feedback_msg += "RT Average: " + str(rt_average) + " ms\n"
        feedback_msg += "Press space bar to continue."
  Routine score_B1
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    TextComponent score_B1_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $feedback_msg
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent score_B1_code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_msg =""
      Begin Routine:
        feedback_msg =""

        accuracy = round((key_resp_B1_corr_sum / 50) * 100, 2)
        rt_average = round((key_resp_B1_rt_sum / 50) * 1000, 2)

        feedback_msg += "Accuracy: " + str(accuracy) + "%\n"
        feedback_msg += "RT Average: " + str(rt_average) + " ms\n"
        feedback_msg += "Press space bar to continue."
  Routine score_B2
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    TextComponent score_B2_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $feedback_msg
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent score_B2_code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_msg =""
      Begin Routine:
        feedback_msg =""

        accuracy = round((key_resp_B2_corr_sum / 50) * 100, 2)
        rt_average = round((key_resp_B2_rt_sum / 50) * 1000, 2)

        feedback_msg += "Accuracy: " + str(accuracy) + "%\n"
        feedback_msg += "RT Average: " + str(rt_average) + " ms\n"
        feedback_msg += "Press space bar to continue."
  Routine score_C1
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    CodeComponent score_C1_code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_msg =""
      Begin Routine:
        feedback_msg =""

        accuracy = round((key_resp_C1_corr_sum / 50) * 100, 2)
        rt_average = round((key_resp_C1_rt_sum / 50) * 1000, 2)

        feedback_msg += "Accuracy: " + str(accuracy) + "%\n"
        feedback_msg += "RT Average: " + str(rt_average) + " ms\n"
        feedback_msg += "Press space bar to continue."
    TextComponent score_C1_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $feedback_msg
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine score_C2
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    CodeComponent score_C2_code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_msg =""
      Begin Routine:
        feedback_msg =""

        accuracy = round((key_resp_C2_corr_sum / 50) * 100, 2)
        rt_average = round((key_resp_C2_rt_sum / 50) * 1000, 2)

        feedback_msg += "Accuracy: " + str(accuracy) + "%\n"
        feedback_msg += "RT Average: " + str(rt_average) + " ms\n"
        feedback_msg += "Press space bar to continue."
    TextComponent score_C2_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $feedback_msg
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine score_C3
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    CodeComponent score_C3_code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_msg =""
      Begin Routine:
        feedback_msg =""

        accuracy = round((key_resp_C3_corr_sum / 50) * 100, 2)
        rt_average = round((key_resp_C3_rt_sum / 50) * 1000, 2)

        feedback_msg += "Accuracy: " + str(accuracy) + "%\n"
        feedback_msg += "RT Average: " + str(rt_average) + " ms\n"
        feedback_msg += "Press space bar to continue."
    TextComponent score_C3_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $feedback_msg
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback_A1
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    ImageComponent background_A_3
      image = picture/background_A.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    CodeComponent code_A1
      Code Type = Auto->JS
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      Before Experiment:
        key_resp_A1_corr_sum = 0.0
        key_resp_A1_rt_sum = 0.0
      Begin Experiment:
        msg = ""
        key_resp_A1_corr_sum_temp = 0.0
        key_resp_A1_rt_sum_temp = 0.0
      Begin Routine:
        key_resp_A1_rt_sum_temp = key_resp_A1_rt_sum_temp + float(str(key_resp_A1.rt))

        if key_resp_A1.corr:
            key_resp_A1_corr_sum_temp =key_resp_A1_corr_sum_temp +1
            continueRoutine = False
        else:
            msg = 'error'
      End Routine:
        key_resp_A1_corr_sum = key_resp_A1_corr_sum_temp
        key_resp_A1_rt_sum = key_resp_A1_rt_sum_temp
    TextComponent feedback_text_A1
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $msg
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  Routine feedback_A2
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    ImageComponent background_A_6
      image = picture/background_A.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    CodeComponent code_A2
      Code Type = Auto->JS
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      Before Experiment:
        key_resp_A2_corr_sum = 0.0
        key_resp_A2_rt_sum = 0.0
      Begin Experiment:
        msg = ""
        key_resp_A2_corr_sum_temp = 0.0
        key_resp_A2_rt_sum_temp = 0.0
      Begin Routine:
        key_resp_A2_rt_sum_temp = key_resp_A2_rt_sum_temp + float(str(key_resp_A2.rt))

        if key_resp_A2.corr:
            key_resp_A2_corr_sum_temp =key_resp_A2_corr_sum_temp +1
            continueRoutine = False
        else:
            msg = 'error'
      End Routine:
        key_resp_A2_corr_sum = key_resp_A2_corr_sum_temp
        key_resp_A2_rt_sum = key_resp_A2_rt_sum_temp
    TextComponent feedback_text_A2
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $msg
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  Routine reminder_A1
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_a1
      image = picture/03_A1.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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  Routine reminder_A2
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    KeyboardComponent key_resp_23
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_a2
      image = picture/04_A2.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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  Routine practice_Task_A1
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    ImageComponent background_A_2
      image = picture/background_A.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_A1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $name
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    KeyboardComponent key_resp_A1
      allowedKeys = 'a', 'l'
      correctAns = $keypad
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine record_Task_A2
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    ImageComponent background_A_5
      image = picture/background_A.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_A2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $name
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    KeyboardComponent key_resp_A2
      allowedKeys = 'a', 'l'
      correctAns = $keypad
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine reminder_B1
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    KeyboardComponent key_resp_24
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_b1
      image = picture/05_B1.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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  Routine practice_Task_B1
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    ImageComponent background_B_2
      image = picture/background_B.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_B1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $words
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    KeyboardComponent key_resp_B1
      allowedKeys = 'a','l'
      correctAns = $keypad
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine reminder_B2
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    KeyboardComponent key_resp_25
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_b2
      image = picture/06_B2.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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  Routine record_Task_B2
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    ImageComponent background_B_6
      image = picture/background_B.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    TextComponent text_B2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $words
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    KeyboardComponent key_resp_B2
      allowedKeys = 'a','l'
      correctAns = $keypad
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine feedback_B2
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    ImageComponent background_B_5
      image = picture/background_B.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    CodeComponent code_B2
      Code Type = Auto->JS
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      Before Experiment:
        key_resp_B2_corr_sum = 0.0
        key_resp_B2_rt_sum = 0.0
      Begin Experiment:
        msg = ""
        key_resp_B2_corr_sum_temp = 0.0
        key_resp_B2_rt_sum_temp = 0.0
      Begin Routine:
        key_resp_B2_rt_sum_temp = key_resp_B2_rt_sum_temp + float(str(key_resp_B2.rt))

        if key_resp_B2.corr:
            key_resp_B2_corr_sum_temp =key_resp_B2_corr_sum_temp +1
            continueRoutine = False
        else:
            msg = 'error'
      End Routine:
        key_resp_B2_corr_sum = key_resp_B2_corr_sum_temp
        key_resp_B2_rt_sum = key_resp_B2_rt_sum_temp
    TextComponent feedback_text_B2
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $msg
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  Routine reminder_C1
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    KeyboardComponent key_resp_26
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_c1
      image = picture/07_C1.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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  Routine feedback_C1
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    ImageComponent background_C_3
      image = picture/background_C.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    CodeComponent code_C1
      Code Type = Auto->JS
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      Before Experiment:
        key_resp_C1_corr_sum = 0.0
        key_resp_C1_rt_sum = 0.0
      Begin Experiment:
        msg = ""
        key_resp_C1_corr_sum_temp = 0.0
        key_resp_C1_rt_sum_temp = 0.0
      Begin Routine:
        key_resp_C1_rt_sum_temp = key_resp_C1_rt_sum_temp + float(str(key_resp_C1.rt))

        if key_resp_C1.corr:
            key_resp_C1_corr_sum_temp =key_resp_C1_corr_sum_temp +1
            continueRoutine = False
        else:
            msg = 'error'
      End Routine:
        key_resp_C1_corr_sum = key_resp_C1_corr_sum_temp
        key_resp_C1_rt_sum = key_resp_C1_rt_sum_temp
    TextComponent feedback_text_C1
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $msg
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  Routine reminder_C2
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    KeyboardComponent key_resp_27
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_c2
      image = picture/08_C2.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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  Routine feedback_C2
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    ImageComponent background_C_6
      image = picture/background_C.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    CodeComponent code_C2
      Code Type = Auto->JS
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      Before Experiment:
        key_resp_C2_corr_sum = 0.0
        key_resp_C2_rt_sum = 0.0
      Begin Experiment:
        msg = ""
        key_resp_C2_corr_sum_temp = 0.0
        key_resp_C2_rt_sum_temp = 0.0
      Begin Routine:
        key_resp_C2_rt_sum_temp = key_resp_C2_rt_sum_temp + float(str(key_resp_C2.rt))

        if key_resp_C2.corr:
            key_resp_C2_corr_sum_temp =key_resp_C2_corr_sum_temp +1
            continueRoutine = False
        else:
            msg = 'error'
      End Routine:
        key_resp_C2_corr_sum = key_resp_C2_corr_sum_temp
        key_resp_C2_rt_sum = key_resp_C2_rt_sum_temp
    TextComponent feedback_text_C2
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $msg
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  Routine reminder_C3
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    KeyboardComponent key_resp_28
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_c3
      image = picture/09_C3.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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  Routine feedback_C3
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    ImageComponent background_C_8
      image = picture/background_C.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    CodeComponent code_C3
      Code Type = Auto->JS
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      Before Experiment:
        key_resp_C3_corr_sum = 0.0
        key_resp_C3_rt_sum = 0.0
      Begin Experiment:
        msg = ""
        key_resp_C3_corr_sum_temp = 0.0
        key_resp_C3_rt_sum_temp = 0.0
      Begin Routine:
        key_resp_C3_rt_sum_temp = key_resp_C3_rt_sum_temp + float(str(key_resp_C3.rt))

        if key_resp_C3.corr:
            key_resp_C3_corr_sum_temp =key_resp_C3_corr_sum_temp +1
            continueRoutine = False
        else:
            msg = 'error'
      End Routine:
        key_resp_C3_corr_sum = key_resp_C3_corr_sum_temp
        key_resp_C3_rt_sum = key_resp_C3_rt_sum_temp
    TextComponent feedback_text_C3
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $msg
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  Routine reminder_D1
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    KeyboardComponent key_resp_29
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_d1
      image = picture/11_D1.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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  Routine feedback_D1
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    ImageComponent background_D_3
      image = picture/background_D.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    CodeComponent code_D1
      Code Type = Auto->JS
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      Before Experiment:
        key_resp_D1_corr_sum = 0.0
        key_resp_D1_rt_sum = 0.0
      Begin Experiment:
        msg = ""
        key_resp_D1_corr_sum_temp = 0.0
        key_resp_D1_rt_sum_temp = 0.0
      Begin Routine:
        key_resp_D1_rt_sum_temp = key_resp_D1_rt_sum_temp + float(str(key_resp_D1.rt))

        if key_resp_D1.corr:
            key_resp_D1_corr_sum_temp =key_resp_D1_corr_sum_temp +1
            continueRoutine = False
        else:
            msg = 'error'
      End Routine:
        key_resp_D1_corr_sum = key_resp_D1_corr_sum_temp
        key_resp_D1_rt_sum = key_resp_D1_rt_sum_temp
    TextComponent feedback_text_D1
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $msg
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  Routine reminder_E1
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    KeyboardComponent key_resp_30
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_e1
      image = picture/12_E1.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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  Routine feedback_E1
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    ImageComponent background_E_3
      image = picture/background_E.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    CodeComponent code_E1
      Code Type = Auto->JS
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      Before Experiment:
        key_resp_E1_corr_sum = 0.0
        key_resp_E1_rt_sum = 0.0
      Begin Experiment:
        msg = ""
        key_resp_E1_corr_sum_temp = 0.0
        key_resp_E1_rt_sum_temp = 0.0
      Begin Routine:
        key_resp_E1_rt_sum_temp = key_resp_E1_rt_sum_temp + float(str(key_resp_E1.rt))

        if key_resp_E1.corr:
            key_resp_E1_corr_sum_temp =key_resp_E1_corr_sum_temp +1
            continueRoutine = False
        else:
            msg = 'error'
      End Routine:
        key_resp_E1_corr_sum = key_resp_E1_corr_sum_temp
        key_resp_E1_rt_sum = key_resp_E1_rt_sum_temp
    TextComponent feedback_text_E1
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $msg
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  Routine reminder_E2
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    KeyboardComponent key_resp_31
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_e2
      image = picture/13_E2.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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  Routine reminder_E3
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    KeyboardComponent key_resp_40
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_e3
      image = picture/14_E3.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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  Routine feedback_E2
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    ImageComponent background_E_6
      image = picture/background_E.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    CodeComponent code_E2
      Code Type = Auto->JS
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      Before Experiment:
        key_resp_E2_corr_sum = 0.0
        key_resp_E2_rt_sum = 0.0
      Begin Experiment:
        msg = ""
        key_resp_E2_corr_sum_temp = 0.0
        key_resp_E2_rt_sum_temp = 0.0
      Begin Routine:
        key_resp_E2_rt_sum_temp = key_resp_E2_rt_sum_temp + float(str(key_resp_E2.rt))

        if key_resp_E2.corr:
            key_resp_E2_corr_sum_temp =key_resp_E2_corr_sum_temp +1
            continueRoutine = False
        else:
            msg = 'error'
      End Routine:
        key_resp_E2_corr_sum = key_resp_E2_corr_sum_temp
        key_resp_E2_rt_sum = key_resp_E2_rt_sum_temp
    TextComponent feedback_text_E2
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $msg
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  Routine feedback_E3
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    ImageComponent background_E_8
      image = picture/background_E.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    CodeComponent code_E3
      Code Type = Auto->JS
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      Before Experiment:
        key_resp_E3_corr_sum = 0.0
        key_resp_E3_rt_sum = 0.0
      Begin Experiment:
        msg = ""
        key_resp_E3_corr_sum_temp = 0.0
        key_resp_E3_rt_sum_temp = 0.0
      Begin Routine:
        key_resp_E3_rt_sum_temp = key_resp_E3_rt_sum_temp + float(str(key_resp_E3.rt))

        if key_resp_E3.corr:
            key_resp_E3_corr_sum_temp =key_resp_E3_corr_sum_temp +1
            continueRoutine = False
        else:
            msg = 'error'
      End Routine:
        key_resp_E3_corr_sum = key_resp_E3_corr_sum_temp
        key_resp_E3_rt_sum = key_resp_E3_rt_sum_temp
    TextComponent feedback_text_E3
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $msg
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  Routine reminder_F1
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    KeyboardComponent key_resp_32
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_f1
      image = picture/16_F1.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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  Routine feedback_F1
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    ImageComponent background_F_3
      image = picture/background_F.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    CodeComponent code_F1
      Code Type = Auto->JS
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      Before Experiment:
        key_resp_F1_corr_sum = 0.0
        key_resp_F1_rt_sum = 0.0
      Begin Experiment:
        msg = ""
        key_resp_F1_corr_sum_temp = 0.0
        key_resp_F1_rt_sum_temp = 0.0
      Begin Routine:
        key_resp_F1_rt_sum_temp = key_resp_F1_rt_sum_temp + float(str(key_resp_F1.rt))

        if key_resp_F1.corr:
            key_resp_F1_corr_sum_temp =key_resp_F1_corr_sum_temp +1
            continueRoutine = False
        else:
            msg = 'error'
      End Routine:
        key_resp_F1_corr_sum = key_resp_F1_corr_sum_temp
        key_resp_F1_rt_sum = key_resp_F1_rt_sum_temp
    TextComponent feedback_text_F1
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $msg
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  Routine reminder_G1
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    KeyboardComponent key_resp_33
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_g1
      image = picture/17_G1.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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  Routine feedback_G1
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    ImageComponent background_G_3
      image = picture/background_G.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    CodeComponent code_G1
      Code Type = Auto->JS
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      Before Experiment:
        key_resp_G1_corr_sum = 0.0
        key_resp_G1_rt_sum = 0.0
      Begin Experiment:
        msg = ""
        key_resp_G1_corr_sum_temp = 0.0
        key_resp_G1_rt_sum_temp = 0.0
      Begin Routine:
        key_resp_G1_rt_sum_temp = key_resp_G1_rt_sum_temp + float(str(key_resp_G1.rt))

        if key_resp_G1.corr:
            key_resp_G1_corr_sum_temp =key_resp_G1_corr_sum_temp +1
            continueRoutine = False
        else:
            msg = 'error'
      End Routine:
        key_resp_G1_corr_sum = key_resp_G1_corr_sum_temp
        key_resp_G1_rt_sum = key_resp_G1_rt_sum_temp
    TextComponent feedback_text_G1
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $msg
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  Routine reminder_G2
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    KeyboardComponent key_resp_35
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_g2
      image = picture/18_G2.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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  Routine feedback_G2
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    ImageComponent background_G_6
      image = picture/background_G.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    CodeComponent code_G2
      Code Type = Auto->JS
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      Before Experiment:
        key_resp_G2_corr_sum = 0.0
        key_resp_G2_rt_sum = 0.0
      Begin Experiment:
        msg = ""
        key_resp_G2_corr_sum_temp = 0.0
        key_resp_G2_rt_sum_temp = 0.0
      Begin Routine:
        key_resp_G2_rt_sum_temp = key_resp_G2_rt_sum_temp + float(str(key_resp_G2.rt))

        if key_resp_G2.corr:
            key_resp_G2_corr_sum_temp =key_resp_G2_corr_sum_temp +1
            continueRoutine = False
        else:
            msg = 'error'
      End Routine:
        key_resp_G2_corr_sum = key_resp_G2_corr_sum_temp
        key_resp_G2_rt_sum = key_resp_G2_rt_sum_temp
    TextComponent feedback_text_G2
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $msg
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  Routine reminder_G3
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    KeyboardComponent key_resp_34
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_g3
      image = picture/19_G3.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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  Routine feedback_G3
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    ImageComponent background_G_8
      image = picture/background_G.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    CodeComponent code_G3
      Code Type = Auto->JS
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      Before Experiment:
        key_resp_G3_corr_sum = 0.0
        key_resp_G3_rt_sum = 0.0
      Begin Experiment:
        msg = ""
        key_resp_G3_corr_sum_temp = 0.0
        key_resp_G3_rt_sum_temp = 0.0
      Begin Routine:
        key_resp_G3_rt_sum_temp = key_resp_G3_rt_sum_temp + float(str(key_resp_G3.rt))

        if key_resp_G3.corr:
            key_resp_G3_corr_sum_temp =key_resp_G3_corr_sum_temp +1
            continueRoutine = False
        else:
            msg = 'error'
      End Routine:
        key_resp_G3_corr_sum = key_resp_G3_corr_sum_temp
        key_resp_G3_rt_sum = key_resp_G3_rt_sum_temp
    TextComponent feedback_text_G3
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $msg
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  Routine reminder_H1
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    ImageComponent image_h1
      image = picture/21_H1.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback_H1
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    ImageComponent background_H_3
      image = picture/background_H.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    TextComponent feedback_text_H1
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $msg
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    CodeComponent code_H1
      Code Type = Auto->JS
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      Before Experiment:
        key_resp_H1_corr_sum = 0.0
        key_resp_H1_rt_sum = 0.0
      Begin Experiment:
        msg = ""
        key_resp_H1_corr_sum_temp = 0.0
        key_resp_H1_rt_sum_temp = 0.0
      Begin Routine:
        key_resp_H1_rt_sum_temp = key_resp_H1_rt_sum_temp + float(str(key_resp_H1.rt))

        if key_resp_H1.corr:
            key_resp_H1_corr_sum_temp =key_resp_H1_corr_sum_temp +1
            continueRoutine = False
        else:
            msg = 'error'
      End Routine:
        key_resp_H1_corr_sum = key_resp_H1_corr_sum_temp
        key_resp_H1_rt_sum = key_resp_H1_rt_sum_temp
  Routine reminder_I1
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    KeyboardComponent key_resp_37
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_i1
      image = picture/22_I1.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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  Routine feedback_I1
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    ImageComponent background_I_3
      image = picture/background_I.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    CodeComponent code_I1
      Code Type = Auto->JS
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      Before Experiment:
        key_resp_I1_corr_sum = 0.0
        key_resp_I1_rt_sum = 0.0
      Begin Experiment:
        msg = ""
        key_resp_I1_corr_sum_temp = 0.0
        key_resp_I1_rt_sum_temp = 0.0
      Begin Routine:
        key_resp_I1_rt_sum_temp = key_resp_I1_rt_sum_temp + float(str(key_resp_I1.rt))

        if key_resp_I1.corr:
            key_resp_I1_corr_sum_temp =key_resp_I1_corr_sum_temp +1
            continueRoutine = False
        else:
            msg = 'error'
      End Routine:
        key_resp_I1_corr_sum = key_resp_I1_corr_sum_temp
        key_resp_I1_rt_sum = key_resp_I1_rt_sum_temp
    TextComponent feedback_text_I1
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $msg
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  Routine reminder_I2
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    KeyboardComponent key_resp_38
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_i2
      image = picture/23_I2.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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  Routine feedback_I2
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    ImageComponent background_I_6
      image = picture/background_I.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    CodeComponent code_I2
      Code Type = Auto->JS
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      Before Experiment:
        key_resp_I2_corr_sum = 0.0
        key_resp_I2_rt_sum = 0.0
      Begin Experiment:
        msg = ""
        key_resp_I2_corr_sum_temp = 0.0
        key_resp_I2_rt_sum_temp = 0.0
      Begin Routine:
        key_resp_I2_rt_sum_temp = key_resp_I2_rt_sum_temp + float(str(key_resp_I2.rt))

        if key_resp_I2.corr:
            key_resp_I2_corr_sum_temp =key_resp_I2_corr_sum_temp +1
            continueRoutine = False
        else:
            msg = 'error'
      End Routine:
        key_resp_I2_corr_sum = key_resp_I2_corr_sum_temp
        key_resp_I2_rt_sum = key_resp_I2_rt_sum_temp
    TextComponent feedback_text_I2
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $msg
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  Routine reminder_I3
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    KeyboardComponent key_resp_39
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_i3
      image = picture/24_I3.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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  Routine feedback_I3
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    CodeComponent code_I3
      Code Type = Auto->JS
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      Before Experiment:
        key_resp_I3_corr_sum = 0.0
        key_resp_I3_rt_sum = 0.0
      Begin Experiment:
        msg = ""
        key_resp_I3_corr_sum_temp = 0.0
        key_resp_I3_rt_sum_temp = 0.0
      Begin Routine:
        key_resp_I3_rt_sum_temp = key_resp_I3_rt_sum_temp + float(str(key_resp_I3.rt))

        if key_resp_I3.corr:
            key_resp_I3_corr_sum_temp =key_resp_I3_corr_sum_temp +1
            continueRoutine = False
        else:
            msg = 'error'
      End Routine:
        key_resp_I3_corr_sum = key_resp_I3_corr_sum_temp
        key_resp_I3_rt_sum = key_resp_I3_rt_sum_temp
    ImageComponent background_feedback_I3
      image = picture/background_I.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    TextComponent feedback_text_I3
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $msg
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  Routine feedback_B1
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    ImageComponent background_B_3
      image = picture/background_B.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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    CodeComponent code_B1
      Code Type = Auto->JS
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      Before Experiment:
        key_resp_B1_corr_sum = 0.0
        key_resp_B1_rt_sum = 0.0
      Begin Experiment:
        msg = ""
        key_resp_B1_corr_sum_temp = 0.0
        key_resp_B1_rt_sum_temp = 0.0
      Begin Routine:
        key_resp_B1_rt_sum_temp = key_resp_B1_rt_sum_temp + float(str(key_resp_B1.rt))

        if key_resp_B1.corr:
            key_resp_B1_corr_sum_temp =key_resp_B1_corr_sum_temp +1
            continueRoutine = False
        else:
            msg = 'error'
      End Routine:
        key_resp_B1_corr_sum = key_resp_B1_corr_sum_temp
        key_resp_B1_rt_sum = key_resp_B1_rt_sum_temp
    TextComponent feedback_text_B1
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $msg
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  Routine score_D1
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    CodeComponent score_D1_code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_msg =""
      Begin Routine:
        feedback_msg =""

        accuracy = round((key_resp_D1_corr_sum / 50) * 100, 2)
        rt_average = round((key_resp_D1_rt_sum / 50) * 1000, 2)

        feedback_msg += "Accuracy: " + str(accuracy) + "%\n"
        feedback_msg += "RT Average: " + str(rt_average) + " ms\n"
        feedback_msg += "Press space bar to continue."
    TextComponent score_D1_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $feedback_msg
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine score_E1
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    CodeComponent score_E1_code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_msg =""
      Begin Routine:
        feedback_msg =""

        accuracy = round((key_resp_E1_corr_sum / 50) * 100, 2)
        rt_average = round((key_resp_E1_rt_sum / 50) * 1000, 2)

        feedback_msg += "Accuracy: " + str(accuracy) + "%\n"
        feedback_msg += "RT Average: " + str(rt_average) + " ms\n"
        feedback_msg += "Press space bar to continue."
    TextComponent score_E1_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $feedback_msg
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine score_E2
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    CodeComponent score_E2_code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_msg =""
      Begin Routine:
        feedback_msg =""

        accuracy = round((key_resp_E2_corr_sum / 50) * 100, 2)
        rt_average = round((key_resp_E2_rt_sum / 50) * 1000, 2)

        feedback_msg += "Accuracy: " + str(accuracy) + "%\n"
        feedback_msg += "RT Average: " + str(rt_average) + " ms\n"
        feedback_msg += "Press space bar to continue."
    TextComponent score_E2_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $feedback_msg
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine score_E3
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    CodeComponent score_E3_code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_msg =""
      Begin Routine:
        feedback_msg =""

        accuracy = round((key_resp_E3_corr_sum / 50) * 100, 2)
        rt_average = round((key_resp_E3_rt_sum / 50) * 1000, 2)

        feedback_msg += "Accuracy: " + str(accuracy) + "%\n"
        feedback_msg += "RT Average: " + str(rt_average) + " ms\n"
        feedback_msg += "Press space bar to continue."
    TextComponent score_E3_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $feedback_msg
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine score_F1
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    CodeComponent score_F1_code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_msg =""
      Begin Routine:
        feedback_msg =""

        accuracy = round((key_resp_F1_corr_sum / 50) * 100, 2)
        rt_average = round((key_resp_F1_rt_sum / 50) * 1000, 2)

        feedback_msg += "Accuracy: " + str(accuracy) + "%\n"
        feedback_msg += "RT Average: " + str(rt_average) + " ms\n"
        feedback_msg += "Press space bar to continue."
    TextComponent score_F1_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $feedback_msg
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine score_G1
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    CodeComponent score_G1_code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_msg =""
      Begin Routine:
        feedback_msg =""

        accuracy = round((key_resp_G1_corr_sum / 50) * 100, 2)
        rt_average = round((key_resp_G1_rt_sum / 50) * 1000, 2)

        feedback_msg += "Accuracy: " + str(accuracy) + "%\n"
        feedback_msg += "RT Average: " + str(rt_average) + " ms\n"
        feedback_msg += "Press space bar to continue."
    TextComponent score_G1_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $feedback_msg
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine score_G2
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    CodeComponent score_G2_code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_msg =""
      Begin Routine:
        feedback_msg =""

        accuracy = round((key_resp_G2_corr_sum / 50) * 100, 2)
        rt_average = round((key_resp_G2_rt_sum / 50) * 1000, 2)

        feedback_msg += "Accuracy: " + str(accuracy) + "%\n"
        feedback_msg += "RT Average: " + str(rt_average) + " ms\n"
        feedback_msg += "Press space bar to continue."
    TextComponent score_G2_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $feedback_msg
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    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine score_G3
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    CodeComponent score_G3_code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_msg =""
      Begin Routine:
        feedback_msg =""

        accuracy = round((key_resp_G3_corr_sum / 50) * 100, 2)
        rt_average = round((key_resp_G3_rt_sum / 50) * 1000, 2)

        feedback_msg += "Accuracy: " + str(accuracy) + "%\n"
        feedback_msg += "RT Average: " + str(rt_average) + " ms\n"
        feedback_msg += "Press space bar to continue."
    TextComponent score_G3_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $feedback_msg
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    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine score_G3_2
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  Routine score_H1
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    CodeComponent score_H1_code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_msg =""
      Begin Routine:
        feedback_msg =""

        accuracy = round((key_resp_H1_corr_sum / 50) * 100, 2)
        rt_average = round((key_resp_H1_rt_sum / 50) * 1000, 2)

        feedback_msg += "Accuracy: " + str(accuracy) + "%\n"
        feedback_msg += "RT Average: " + str(rt_average) + " ms\n"
        feedback_msg += "Press space bar to continue."
    TextComponent score_H1_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $feedback_msg
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    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine score_I1
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    CodeComponent score_I1_code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_msg =""
      Begin Routine:
        feedback_msg =""

        accuracy = round((key_resp_I1_corr_sum / 50) * 100, 2)
        rt_average = round((key_resp_I1_rt_sum / 50) * 1000, 2)

        feedback_msg += "Accuracy: " + str(accuracy) + "%\n"
        feedback_msg += "RT Average: " + str(rt_average) + " ms\n"
        feedback_msg += "Press space bar to continue."
    TextComponent score_I1_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $feedback_msg
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    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine score_I2
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    CodeComponent score_I2_code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_msg =""
      Begin Routine:
        feedback_msg =""

        accuracy = round((key_resp_I2_corr_sum / 50) * 100, 2)
        rt_average = round((key_resp_I2_rt_sum / 50) * 1000, 2)

        feedback_msg += "Accuracy: " + str(accuracy) + "%\n"
        feedback_msg += "RT Average: " + str(rt_average) + " ms\n"
        feedback_msg += "Press space bar to continue."
    TextComponent score_I2_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $feedback_msg
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    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine score_I3
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    CodeComponent score_I3_code
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_msg =""
      Begin Routine:
        feedback_msg =""

        accuracy = round((key_resp_I3_corr_sum / 50) * 100, 2)
        rt_average = round((key_resp_I3_rt_sum / 50) * 1000, 2)

        feedback_msg += "Accuracy: " + str(accuracy) + "%\n"
        feedback_msg += "RT Average: " + str(rt_average) + " ms\n"
        feedback_msg += "Press space bar to continue."
    TextComponent score_I3_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $feedback_msg
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    KeyboardComponent key_resp_21
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Welcome
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    ImageComponent welcome
      image = picture/01_welcome.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_22
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    ImageComponent image_end
      image = picture/25_END.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_36
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ISI1500_A1
    RoutineSettingsComponent ISI1500_A1
      stopVal [duration (s)] = 1.5
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    ImageComponent background_A
      image = picture/background_A.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_ISI1500_A1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine ISI250_A1
    RoutineSettingsComponent ISI250_A1
      stopVal [duration (s)] = 0.25
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    ImageComponent background_A_4
      image = picture/background_A.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
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    TextComponent text_ISI250_A1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
      text = +
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  Routine ISI250_B1
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    ImageComponent background_B_4
      image = picture/background_B.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
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    TextComponent text_ISI250_B1
      color = -1,-1,-1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
      text = +
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  Routine ISI1500_B1
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    ImageComponent background_B
      image = picture/background_B.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_ISI1500_B1
      color = -1,-1,-1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine ISI1500_C1
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    ImageComponent background_C
      image = picture/background_C.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_ISI1500_C1
      color = -1,-1,-1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine ISI250_C1
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    ImageComponent background_C_4
      image = picture/background_C.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
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    TextComponent text_ISI250_C1
      color = -1,-1,-1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
      text = +
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  Routine ISI1500_D1
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    ImageComponent background_D
      image = picture/background_D.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_ISI1500_D1
      color = -1,-1,-1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine ISI250_D1
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    ImageComponent background_D_4
      image = picture/background_D.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
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    TextComponent text_ISI250_D1
      color = -1,-1,-1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
      text = +
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  Routine ISI1500_E1
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    ImageComponent background_E
      image = picture/background_E.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_ISI1500_E1
      color = -1, -1, -1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine ISI250_E1
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    ImageComponent background_E_4
      image = picture/background_E.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
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    TextComponent text_ISI250_E1
      color = -1,-1,-1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
      text = +
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  Routine ISI1500_F1
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    ImageComponent background_F
      image = picture/background_F.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_ISI1500_F1
      color = -1, -1, -1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine ISI250_F1
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    ImageComponent background_F_4
      image = picture/background_F.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
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    TextComponent text_ISI250_F1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
      text = +
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  Routine ISI1500_G1
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    ImageComponent background_G
      image = picture/background_G.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_ISI1500_G1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine ISI250_G1
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    ImageComponent background_G_4
      image = picture/background_G.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
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    TextComponent text_ISI_G1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
      text = +
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  Routine ISI1500_H1
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    ImageComponent background_H
      image = picture/background_H.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_ISI1500_H1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine ISI250_H1
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    ImageComponent background_H_4
      image = picture/background_H.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
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    TextComponent text_ISI200_H1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
      text = +
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  Routine ISI1500_I1
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    ImageComponent background_I
      image = picture/background_I.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_ISI1500_I1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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  Routine ISI250_I1
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    ImageComponent background_I_4
      image = picture/background_I.png
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
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    TextComponent text_ISI250_I1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
      text = +
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Flow
  Routine Welcome
  Routine Introduction
  Routine reminder_A1
  Routine ISI1500_A1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = excel/TestA1_D2_right_japan.xlsx
    loopType = random
    nReps = 1
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    Routine practice_Task_A1
    Routine feedback_A1
    Routine ISI250_A1
  LoopTerminator trials
  Routine score_A1
  Routine reminder_A2
  Routine ISI1500_A1
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = excel/TestA1_D2_right_japan.xlsx
    loopType = random
    nReps = 1
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    Routine record_Task_A2
    Routine feedback_A2
    Routine ISI250_A1
  LoopTerminator trials_4
  Routine score_A2
  Routine reminder_B1
  Routine ISI1500_B1
  LoopInitiator trials_7 loopType="TrialHandler"
    conditionsFile = excel/TaskB_Positive_ornot.xlsx
    loopType = random
    nReps = 1
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    Routine practice_Task_B1
    Routine feedback_B1
    Routine ISI250_B1
  LoopTerminator trials_7
  Routine score_B1
  Routine reminder_B2
  Routine ISI1500_B1
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = excel/TaskB_Positive_ornot.xlsx
    loopType = random
    nReps = 1
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    Routine record_Task_B2
    Routine feedback_B2
    Routine ISI250_B1
  LoopTerminator trials_2
  Routine score_B2
  Routine reminder_C1
  Routine ISI1500_C1
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = excel/TaskC1_E2_block1st_prac_shuffle_congruent_japan_prefer_sequence.xlsx
    loopType = sequential
    nReps = 1
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    Routine record_Task_C1
    Routine feedback_C1
    Routine ISI250_C1
  LoopTerminator trials_3
  Routine score_C1
  Routine reminder_C2
  Routine ISI1500_C1
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = excel/TaskC1_E2_block2nd_congruent_japan_prefer_sequence.xlsx
    loopType = sequential
    nReps = 1
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    Routine record_Task_C2
    Routine feedback_C2
    Routine ISI250_C1
  LoopTerminator trials_5
  Routine score_C2
  Routine reminder_C3
  Routine ISI1500_C1
  LoopInitiator trials_6 loopType="TrialHandler"
    conditionsFile = excel/TaskC1_E2_block1st3rd_congruent_japan_prefer_sequence.xlsx
    loopType = sequential
    nReps = 1
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    Routine record_Task_C3
    Routine feedback_C3
    Routine ISI250_C1
  LoopTerminator trials_6
  Routine score_C3
  Routine reminder_D1
  Routine ISI1500_D1
  LoopInitiator trials_8 loopType="TrialHandler"
    conditionsFile = excel/TaskA2_D1_right_korean.xlsx
    loopType = random
    nReps = 1
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    Routine record_Task_D1
    Routine feedback_D1
    Routine ISI250_D1
  LoopTerminator trials_8
  Routine score_D1
  Routine reminder_E1
  Routine ISI1500_E1
  LoopInitiator trials_9 loopType="TrialHandler"
    conditionsFile = excel/TaskC2_E1_block1st_prac_shuffle_congruent_korean_prefer.xlsx
    loopType = sequential
    nReps = 1
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    Routine practice_Task_E1
    Routine feedback_E1
    Routine ISI250_E1
  LoopTerminator trials_9
  Routine score_E1
  Routine reminder_E2
  Routine ISI1500_E1
  LoopInitiator trials_10 loopType="TrialHandler"
    conditionsFile = excel/TaskC2_E1_block2nd_congruent_korean_prefer_sequence.xlsx
    loopType = sequential
    nReps = 1
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    Routine record_Task_E2
    Routine feedback_E2
    Routine ISI250_E1
  LoopTerminator trials_10
  Routine score_E2
  Routine reminder_E3
  Routine ISI1500_E1
  LoopInitiator trials_11 loopType="TrialHandler"
    conditionsFile = excel/TaskC2_E1_block1st3rd_congruent_korean_prefer_sequence.xlsx
    loopType = sequential
    nReps = 1
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    Routine record_Task_E3
    Routine feedback_E3
    Routine ISI250_E1
  LoopTerminator trials_11
  Routine score_E3
  Routine reminder_F1
  Routine ISI1500_F1
  LoopInitiator trials_12 loopType="TrialHandler"
    conditionsFile = excel/TaskF1_H2_korean_right_truncate.xlsx
    loopType = random
    nReps = 1
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    Routine record_Task_F1
    Routine feedback_F1
    Routine ISI250_F1
  LoopTerminator trials_12
  Routine score_F1
  Routine reminder_G1
  Routine ISI1500_G1
  LoopInitiator trials_13 loopType="TrialHandler"
    conditionsFile = excel/TaskG1_I2_block1st_prac_shuffle_congruent_korean_prefer.xlsx
    loopType = sequential
    nReps = 1
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    Routine practice_Task_G1
    Routine feedback_G1
    Routine ISI250_G1
  LoopTerminator trials_13
  Routine score_G1
  Routine reminder_G2
  Routine ISI1500_G1
  LoopInitiator trials_14 loopType="TrialHandler"
    conditionsFile = excel/TaskG1_I2_block2nd_congruent_korean_prefer_sequence.xlsx
    loopType = sequential
    nReps = 1
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    Routine record_Task_G2
    Routine feedback_G2
    Routine ISI250_G1
  LoopTerminator trials_14
  Routine score_G2
  Routine reminder_G3
  Routine ISI1500_G1
  LoopInitiator trials_15 loopType="TrialHandler"
    conditionsFile = excel/TaskG1_I2_block1st3rd_congruent_korean_prefer_sequence.xlsx
    loopType = sequential
    nReps = 1
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    Routine record_Task_G3
    Routine feedback_G3
    Routine ISI250_G1
  LoopTerminator trials_15
  Routine score_G3
  Routine reminder_H1
  Routine ISI1500_H1
  LoopInitiator trials_16 loopType="TrialHandler"
    conditionsFile = excel/TaskF2_H1_japan_right_truncate.xlsx
    loopType = random
    nReps = 1
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    Routine record_Task_H1
    Routine feedback_H1
    Routine ISI250_H1
  LoopTerminator trials_16
  Routine score_H1
  Routine reminder_I1
  Routine ISI1500_I1
  LoopInitiator trials_17 loopType="TrialHandler"
    conditionsFile = excel/TaskG2_I1_block1st_prac_shuffle_congruent_japan_prefer.xlsx
    loopType = sequential
    nReps = 1
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    Routine practice_Task_I1
    Routine feedback_I1
    Routine ISI250_I1
  LoopTerminator trials_17
  Routine score_I1
  Routine reminder_I2
  Routine ISI1500_I1
  LoopInitiator trials_18 loopType="TrialHandler"
    conditionsFile = excel/TaskG2_I1_block2nd_congruent_japan_prefer_sequence.xlsx
    loopType = sequential
    nReps = 1
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    Routine record_Task_I2
    Routine feedback_I2
    Routine ISI250_I1
  LoopTerminator trials_18
  Routine score_I2
  Routine reminder_I3
  Routine ISI1500_I1
  LoopInitiator trials_19 loopType="TrialHandler"
    conditionsFile = excel/TaskG2_I1_block1st3rd_congruent_japan_prefer_sequence.xlsx
    loopType = sequential
    nReps = 1
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    Routine record_Task_I3
    Routine feedback_I3
    Routine ISI250_I1
  LoopTerminator trials_19
  Routine score_I3
  Routine end
